CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Raw_Data
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Raw_Data
    Name the output image:Img_Adjust
    Rescaling method:Stretch each image to use the full intensity range
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Raw_Data
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Raw_Data
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ReduceNoise:[module_num:8|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
    Select the input image:Img_Adjust
    Name the output image:Denoised_Img
    Size:15
    Distance:11
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):30,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Img_Adjust
    Name the output image:Cell_Outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#01D8FE
    Select objects to display:Cells

MeasureImageAreaOccupied:[module_num:11|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_04Groups,Image|ModuleError_03NamesAndTypes,Image|ModuleError_01Images,Image|ModuleError_02Metadata,Image|ModuleError_05RescaleIntensity,Image|AreaOccupied_AreaOccupied_Cells,Image|AreaOccupied_Perimeter_Cells,Image|AreaOccupied_TotalArea_Cells,Image|Height_Raw_Data,Image|Threshold_SumOfEntropies_Cells,Image|Threshold_OrigThreshold_Cells,Image|Threshold_WeightedVariance_Cells,Image|Threshold_FinalThreshold_Cells,Image|Width_Raw_Data,Image|Scaling_Raw_Data,Image|PathName_Raw_Data,Image|Group_Number,Image|Group_Index,Image|FileName_Raw_Data,Image|Frame_Raw_Data,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Cell_Outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw_Data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outline
    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
